<CompuCell3D Revision="20210612" Version="4.2.5">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="EPI"/>
      <CellType TypeId="2" TypeName="MES"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="EPI" LambdaVolume="2.0" TargetVolume="50"/>
      <VolumeEnergyParameters CellType="MES" LambdaVolume="2.0" TargetVolume="50"/>
   </Plugin>
   
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="EPI" LambdaSurface="2.0" TargetSurface="50"/>
      <SurfaceEnergyParameters CellType="MES" LambdaSurface="2.0" TargetSurface="50"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="EPI">10.0</Energy>
      <Energy Type1="Medium" Type2="MES">10.0</Energy>
      <Energy Type1="EPI" Type2="EPI">10.0</Energy>
      <Energy Type1="EPI" Type2="MES">10.0</Energy>
      <Energy Type1="MES" Type2="MES">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Steppable Type="DiffusionSolverFE">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="ECM_D">
         <DiffusionData>
            <FieldName>ECM_D</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
            <GlobalDecayConstant>1e-05</GlobalDecayConstant>
            <!-- Additional options are: -->
            <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <DiffusionCoefficient CellType="EPI">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="MES">0.1</DiffusionCoefficient>
            <DecayCoefficient CellType="EPI">0.0001</DecayCoefficient>
            <DecayCoefficient CellType="MES">0.0001</DecayCoefficient>
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <Secretion Type="EPI">0.1</Secretion>
            <Secretion Type="MES">0.1</Secretion>
            <!-- <SecretionOnContact SecreteOnContactWith="EPI,MES" Type="MES">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="MES">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="10.0"/>
               <ConstantValue PlanePosition="Max" Value="5.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               <ConstantDerivative PlanePosition="Min" Value="10.0"/>
               <ConstantDerivative PlanePosition="Max" Value="5.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   
   <Steppable Type="BlobInitializer">
      
      <!-- Initial layout of cells in the form of spherical (circular in 2D) blob -->
      <Region>
         <Center x="128" y="128" z="0"/>
         <Radius>51</Radius>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>EPI,MES</Types>
      </Region>
   </Steppable>
</CompuCell3D>
