<CompuCell3D Revision="20210612" Version="4.2.5">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="2"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="EPI"/>
      <CellType TypeId="2" TypeName="MES"/>
      <CellType TypeId="3" TypeName="ECM" Freeze=""/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="EPI" LambdaVolume="2.0" TargetVolume="50"/>
      <VolumeEnergyParameters CellType="MES" LambdaVolume="2.0" TargetVolume="50"/>
   </Plugin>
   
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="EPI" LambdaSurface="0.2" TargetSurface="40"/>
      <SurfaceEnergyParameters CellType="MES" LambdaSurface="0.2" TargetSurface="35"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   <Plugin Name="NeighborTracker">
   
   <!-- Module tracking neighboring cells of each cell -->
</Plugin>
<Plugin Name="MomentOfInertia"/>

<Plugin Name="AdhesionFlex">
   
   <!-- Specification of adhesion energies as a function of cadherin concentration at cell membranes -->
   <!-- Adhesion energy is a function of two cells in ocntact. the functional form is specified by the user -->
   <AdhesionMolecule Molecule="CC"/>
   <AdhesionMolecule Molecule="CM"/>
   <AdhesionMolecule Molecule="MM"/>
   <AdhesionMoleculeDensity CellType="Medium" Density="0" Molecule="CC"/>
   <AdhesionMoleculeDensity CellType="Medium" Density="0" Molecule="CM"/>
   <AdhesionMoleculeDensity CellType="Medium" Density="0" Molecule="MM"/>
   <AdhesionMoleculeDensity CellType="EPI" Density="3" Molecule="CC"/>
   <AdhesionMoleculeDensity CellType="EPI" Density="0" Molecule="CM"/>
   <AdhesionMoleculeDensity CellType="EPI" Density="0" Molecule="MM"/>
   <AdhesionMoleculeDensity CellType="MES" Density="0" Molecule="CC"/>
   <AdhesionMoleculeDensity CellType="MES" Density="3" Molecule="CM"/>
   <AdhesionMoleculeDensity CellType="MES" Density="0" Molecule="MM"/>
   <AdhesionMoleculeDensity CellType="ECM" Density="0" Molecule="CC"/>
   <AdhesionMoleculeDensity CellType="ECM" Density="0" Molecule="CM"/>
   <AdhesionMoleculeDensity CellType="ECM" Density="6" Molecule="MM"/>
   <BindingFormula Name="Binary">
      <Formula>Molecule1*Molecule2</Formula>
      <Variables>
         <AdhesionInteractionMatrix>
            <BindingParameter Molecule1="CC" Molecule2="CC">0.5</BindingParameter>
            <BindingParameter Molecule1="CC" Molecule2="CM">-0.5</BindingParameter>
            <BindingParameter Molecule1="CC" Molecule2="MM">0.0</BindingParameter>
            <BindingParameter Molecule1="CM" Molecule2="CM">0.0</BindingParameter>
            <BindingParameter Molecule1="CM" Molecule2="MM">0.5</BindingParameter>
            <BindingParameter Molecule1="MM" Molecule2="MM">0.0</BindingParameter>
         </AdhesionInteractionMatrix>
      </Variables>
   </BindingFormula>
   <NeighborOrder>1</NeighborOrder>
</Plugin>

<Plugin Name="ExternalPotential">
   
   <!-- External force applied to cell. Each cell type has different force. -->
   <!-- For more flexible specification of the constraint (done in Python) please use ExternalPotential plugin without specifying per-type parameters -->
   <!-- <Algorithm options are: PixelBased, CenterOfMassBased> -->
   <Algorithm>CenterOfMassBased</Algorithm>
</Plugin>
   
   <Plugin Name="Secretion">

   </Plugin>

   <Steppable Type="DiffusionSolverFE">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="ECM_D">
         <DiffusionData>
            <FieldName>ECM_D</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.0</GlobalDecayConstant>
            <!-- Additional options are: -->
            <InitialConcentrationExpression>x/256</InitialConcentrationExpression>
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <DiffusionCoefficient CellType="EPI">0</DiffusionCoefficient>
            <DiffusionCoefficient CellType="MES">0</DiffusionCoefficient>
            <!-- <DecayCoefficient CellType="EPI">0.0001</DecayCoefficient> -->
            <!-- <DecayCoefficient CellType="MES">0.0001</DecayCoefficient> -->
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <!-- <Secretion Type="MES">0.1</Secretion> -->
            <!-- <SecretionOnContact SecreteOnContactWith="EPI,MES" Type="MES">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="MES">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="1.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
               <!-- <ConstantDerivative PlanePosition="Max" Value="5.0"/> -->
               <!-- Other options are (examples): -->
               <Periodic/>
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
      
      <DiffusionField Name="ECM_A">
         <DiffusionData>
            <FieldName>ECM_A</FieldName>
            <GlobalDiffusionConstant>0.0</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.0</GlobalDecayConstant>
            <!-- Additional options are: -->
            <!-- <InitialConcentrationExpression>x/256</InitialConcentrationExpression> -->
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <DiffusionCoefficient CellType="EPI">0</DiffusionCoefficient>
            <DiffusionCoefficient CellType="MES">0</DiffusionCoefficient>
            <!-- <DecayCoefficient CellType="EPI">0.0001</DecayCoefficient> -->
            <!-- <DecayCoefficient CellType="MES">0.0001</DecayCoefficient> -->
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <!-- <Secretion Type="MES">0.1</Secretion> -->
            <!-- <SecretionOnContact SecreteOnContactWith="EPI,MES" Type="MES">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="MES">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <!-- <ConstantValue PlanePosition="Min" Value="0.0"/> -->
               <!-- <ConstantValue PlanePosition="Max" Value="1.0"/> -->
               <!-- Other options are (examples): -->
               <Periodic/>
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
               <!-- <ConstantDerivative PlanePosition="Max" Value="5.0"/> -->
               <!-- Other options are (examples): -->
               <Periodic/>
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   
   <!-- <Steppable Type="UniformInitializer"> -->
   <!-- <Region> -->
      <!-- <BoxMin x="98" y="98" z="1"/> -->
      <!-- <BoxMax x="160" y="160" z="2"/> -->
      <!-- <Gap>0</Gap> -->
      <!-- <Width>7</Width> -->
      <!-- <Types>EPI</Types> -->
   <!-- </Region> -->
<!-- </Steppable> -->
   
   <!-- <Steppable Type="UniformInitializer"> -->
   <!-- <Region> -->
      <!-- <BoxMin x="0" y="0" z="0"/> -->
      <!-- <BoxMax x="255" y="255" z="1"/> -->
      <!-- <Gap>0</Gap> -->
      <!-- <Width>4</Width> -->
      <!-- <Types>ECM</Types> -->
   <!-- </Region> -->
<!-- </Steppable> -->

   
   
</CompuCell3D>
